CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '', 'For a large screen, it may take a long time to read and collect all the images. E.g., for a screen of 830k files (images+thumbnails), it took ~2 hrs to process. However, this only needs to be done once as the file list is saved as part of the project file.', '', 'Recommended to save time: Drag/drop the images once for a single project (e.g, QC), save the project as a template and then copy/paste analysis modules from the other two by opening additional instances of CellProfiler, then save them as separate projects.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "thumb")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'The settings here allow the user to extract (assuming an ImageXpress microscope is used):', '* The UserStem prefix, and the Well and Site IDs from the filename, as well as the channel number.', '* The 5-digit Plate ID, and optionally, the date of acquisition from the folder name. If needed, the regular expression can modified to collect the barcode ID as well.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<UserStem>.*)_(?P<Well>[a-pA-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '', 'The settings her match the channels by the channel number collected in the Metadata module.', 'Setting the image set matching method to "Metadata" has the advantage of omitting sites in which there is a metadata mismatch, i.e, missing files.']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
    Assign a name to:Images matching rules
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    Match metadata:[{u'OrigER': u'Plate', u'OrigAGP': u'Plate', u'OrigRNA': u'Plate', u'OrigDNA': u'Plate', u'OrigMito': u'Plate'}, {u'OrigER': u'Well', u'OrigAGP': u'Well', u'OrigRNA': u'Well', u'OrigDNA': u'Well', u'OrigMito': u'Well'}, {u'OrigER': u'Site', u'OrigAGP': u'Site', u'OrigRNA': u'Site', u'OrigDNA': u'Site', u'OrigMito': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:OrigMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:OrigAGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:OrigRNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:OrigER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:OrigDNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', 'No grouping is needed, so this module is not enabled.']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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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notes:['Generate image quality measurements for all channels. Image features made here include image blur measurements at multiple spatial scales, saturation metrics, and intensity-based measures.']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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:4
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageQuality:[module_num:6|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notes:['In addition to the more general image QC features, collect the thresholds for the DNA and RNA images. We use these two channels because the DNA image is used for nuclei identification and the RNA image is used for cell body identification. Examining the histogram of these values is often helpful in setting the lower threshold bound, as well as getting a sense of what outliers look like.', '', 'Note that different threshold methods are calculated for each channel, although more could be added. Also note that even though the channels will be illumination corrected in the feature extraction pipeline, we have not found that it affects QC assessment substantially.']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
    Calculate metrics for which images?:Select...
    Image count:2
    Scale count:1
    Threshold count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:OrigDNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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    Select the images to measure:OrigRNA
    Include the image rescaling value?:No
    Calculate blur metrics?:No
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    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground

ExportToDatabase:[module_num:7|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notes:['Write the quality control measurements to the database of your choice, and create a properties file for exploring the data with CellProfiler Analyst. A CellProfiler Analyst properties file and workspace file are also created as well.', '', 'Change the table prefix to same as the folder (tables cannot start with a number)']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:QC
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    Output file location:Default Output Folder|/imaging/analysis/2011_07_13_TargetAccelerator_CancerProgram_MPG/2013_10_11_SIGMA2_Pilot/Output/QC
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CellPainting.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigER,OrigRNA,OrigDNA,OrigMito,OrigAGP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:5
    Properties group field count:1
    Properties filter field count:0
    Workspace measurement count:12
    Experiment name:20180310
    Which objects should be used for locations?:None
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
    Select an image to include:OrigDNA
    Use the image name for the display?:No
    Image name:DNA
    Channel color:red
    Select an image to include:OrigER
    Use the image name for the display?:No
    Image name:ER
    Channel color:green
    Select an image to include:OrigRNA
    Use the image name for the display?:No
    Image name:RNA
    Channel color:blue
    Select an image to include:OrigAGP
    Use the image name for the display?:No
    Image name:AGP
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:Yes
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
    Enter the object name:Image
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
    Enter the object name:Image
    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigDNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigER
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigRNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigAGP
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Index
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    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PowerLogLogSlope_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigDNA
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigDNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigER
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigER
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigRNA
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigRNA
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigAGP
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigAGP
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:ScatterPlot
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_StdIntensity_OrigMito
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis measurement:ImageQuality_PercentMaximal_OrigMito
    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigDNA_2W
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber
    Select the measurement display tool:Histogram
    Type of measurement to plot on the X-axis:Image
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    Select the X-axis measurement:ImageQuality_ThresholdOtsu_OrigRNA_3FW
    Select the X-axis index:ImageNumber
    Type of measurement to plot on the Y-axis:Image
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    Select the Y-axis index:ImageNumber

CreateBatchFiles:[module_num:8|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notes:['This module is used only if running the pipeline on a computing cluster; it is used to convert all paths to the format as seen by the computing node. If not using a computing cluster (i.e, you are running the pipeline locally), disable this module by clicking on the green checkmark to the left of the module name; the checkmark is grayed out when the module is disabled.']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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:\\\\\\\\iodine\\\\imaging_analysis
    Cluster root path:/imaging/analysis
    Local root path:\\\\\\\\iodine\\\\cbnt_cbimageX
    Cluster root path:/cbnt/cbimageX
